CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "DAPI")
    Name to assign these images:cellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C1")
    Name to assign these images:red_speckles
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2")
    Name to assign these images:green_speckles
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:cellMask
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):150,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:speckles
    Name the output image:EnhancedSpots
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:7|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
    Select the input image:EnhancedSpots
    Name the output image:MaskedSpots
    Use objects or an image as a mask?:Objects
    Select object for mask:cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskedSpots
    Name the primary objects to be identified:per_spots
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.85
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:10|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
    Parent objects:cell
    Child objects:per_spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:spots_in_cell
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\ShaonLab\\imageProc\\test1\\cropped_results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cell|AreaShape_Area,cell|Number_Object_Number,cell|Children_per_spots_Count,cell|Location_Center_Z,cell|Location_Center_X,cell|Location_Center_Y,per_spots|Location_Center_X,per_spots|Location_Center_Z,per_spots|Location_Center_Y,per_spots|Parent_cell,per_spots|Children_spots_in_cell_Count,per_spots|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20220503_transformed
    Overwrite existing files without warning?:No
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:per_spots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:cell
    Name the output objects:ShrunkenCell
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:cell
    Select the smaller identified objects:ShrunkenCell
    Name the tertiary objects to be identified:CellMembrane
    Shrink smaller object prior to subtraction?:No

CombineObjects:[module_num:14|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
    Select initial object set:CellMembrane
    Select object set to combine:per_spots
    Select how to handle overlapping objects:Segment
    Name the combined object set:CombinedObjects

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:CombinedObjects
    Name the output image:spot_per_cell_image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:spot_per_cell_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:speckles
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:spot_per_cell
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\ShaonLab\\imageProc\\test1\\cropped_results
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
